PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1800, 1169]
  expName = 2afc_detection_constant
  keyboardBackend = Pyglet
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Routines
  Routine feedback
    TextComponent text_3
      letterHeight = 0.04
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 30
      text [set every repeat] = $message
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  Routine trial
    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Routine:
        current_trial = trial_list[trial_counter]
        comparison_freq = current_trial['comparison_freq']
        standard_position = current_trial['standard_position']

        if standard_position == 1:
            sound_1_freq = base_freq
            sound_2_freq = comparison_freq
            correctAns = '1'
        else:
            sound_1_freq = comparison_freq
            sound_2_freq = base_freq
            correctAns = '2'
      End Routine:
        if key_resp.keys == correctAns:
            accuracy = 1
        else:
            accuracy = 0

        trials.addData('sound_1_freq', sound_1_freq)
        trials.addData('sound_2_freq', sound_2_freq)
        trials.addData('standard_position', standard_position)
        trials.addData('level_pct', current_trial['level_pct'])
        trials.addData('direction', current_trial['direction'])
        trials.addData('correctAns', correctAns)
        trials.addData('response', key_resp.keys)
        trials.addData('accuracy', accuracy)

        trial_counter = trial_counter + 1

        if accuracy == 1:
            message = 'Correct'
        else:
            message = 'Incorrect'
    KeyboardComponent key_resp
      allowedKeys = '1','2'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 2.1
      store = first key
      storeCorrect = True
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    SoundComponent sound_1
      sound [set every repeat] = $sound_1_freq
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_2
      sound [set every repeat] = $sound_2_freq
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 1.0
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  Routine thank
    TextComponent text_4
      letterHeight = 0.04
      startVal [frame N] = 1
      stopVal [duration (frames)] = 100
      text = Thank you!
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [frame N] = 1
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  Routine instruction
    TextComponent text_1
      letterHeight = 0.04
      startVal [frame N] = 1
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      text:
        You will hear two tones played in sequence.
        One tone is the standard tone, and the other is different.
        Indicate which tone was the standard tone (Press 1 if the 1st tone was standard, Press 2 if the 2nd tone was standard).
        Before starting, you will hear the standard tone played twice as a reference.
        Keep your eyes on the central cross during the experiment.
        Press space to start.
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 1
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    CodeComponent code
      Code Type = JS
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      Begin JS Experiment:
        base_freq = 261.6;
        levels = [0.0196, 0.0396, 0.06];
        n_reps_per_position = 15;
        trial_list = [];
        for (var level, _pj_c = 0, _pj_a = levels, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            level = _pj_a[_pj_c];
            for (var direction, _pj_f = 0, _pj_d = [(- 1), 1], _pj_e = _pj_d.length; (_pj_f < _pj_e); _pj_f += 1) {
                direction = _pj_d[_pj_f];
                comparison_freq = (base_freq * (1 + (direction * level)));
                for (var standard_position, _pj_i = 0, _pj_g = [1, 2], _pj_h = _pj_g.length; (_pj_i < _pj_h); _pj_i += 1) {
                    standard_position = _pj_g[_pj_i];
                    for (var _, _pj_l = 0, _pj_j = util.range(n_reps_per_position), _pj_k = _pj_j.length; (_pj_l < _pj_k); _pj_l += 1) {
                        _ = _pj_j[_pj_l];
                        trial_list.push({"comparison_freq": comparison_freq, "level_pct": (level * 100), "direction": direction, "standard_position": standard_position});
                    }
                }
            }
        }
        trial_list = util.shuffle(trial_list);
        trial_counter = 0;
        n_total_trials = trial_list.length;
  Routine block
    TextComponent text_2
      letterHeight = 0.04
      startVal [frame N] = 1
      text = Press space key to start the block.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 1
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Flow
  Routine instruction
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine block
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = $n_total_trials
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      Routine trial
      Routine feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine thank
